PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = MKT_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        In this experiment, you will be shown different products and asked to choose the option you would prefer.
        For each question, choose the keyboard keys "A", "B", and "C" respectively.

        After each choice, you will be asked to rate how confident you are in your answer.

        Please choose the option that you would genuinely prefer and answer each question based on your own judgment.

        There are NO right or wrong answers.

        Press 'SPACE' to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent text_2
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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  Routine End
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your participation!
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  Routine Confidence_level
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How confident are you in your answer?
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Items
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    TextComponent question
      letterHeight = 0.05
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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    TextComponent OptionA
      letterHeight = 0.04
      pos [set every repeat] = (-0.5, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Option_A
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    TextComponent PriceA
      letterHeight = 0.05
      pos [set every repeat] = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Price_A
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    TextComponent OptionB
      letterHeight = 0.04
      pos [set every repeat] = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Option_B
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    TextComponent PriceB
      color [set every repeat] = white
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Price_B
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    TextComponent OptionC
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0.5, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Option_C
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    TextComponent PriceC
      letterHeight = 0.05
      pos [set every repeat] = (0.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $Price_C
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    KeyboardComponent key_resp_3
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Pooja/Downloads/decoy_stimuli_80.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial', np.int64(1)), ('Item', 'Coffee'), ('Condition', 'no_decoy'), ('Question', 'Which coffee would you choose?'), ('Option_A', 'A. Premium Coffee'), ('Price_A', '₹ 180.00'), ('Option_B', 'B. Regular Coffee'), ('Price_B', '₹ 140.00'), ('Option_C', None), ('Price_C', None), ('Target', 'A')]),
      OrderedDict([('Trial', np.int64(3)), ('Item', 'Pizza'), ('Condition', 'no_decoy'), ('Question', 'Which pizza would you choose?'), ('Option_A', 'A. Large Pizza'), ('Price_A', '₹ 450.00'), ('Option_B', 'B. Medium Pizza'), ('Price_B', '₹ 330.00'), ('Option_C', None), ('Price_C', None), ('Target', 'A')]),
      OrderedDict([('Trial', np.int64(5)), ('Item', 'Burger Meal'), ('Condition', 'no_decoy'), ('Question', 'Which burger meal would you choose?'), ('Option_A', 'A. Premium Burger Meal'), ('Price_A', '₹ 350.00'), ('Option_B', 'B. Regular Burger Meal'), ('Price_B', '₹ 250.00'), ('Option_C', None), ('Price_C', None), ('Target', 'A')]),
      OrderedDict([('Trial', np.int64(7)), ('Item', 'Shake'), ('Condition', 'no_decoy'), ('Question', 'Which shake would you choose?'), ('Option_A', 'A. Large Shake'), ('Price_A', '₹ 220.00'), ('Option_B', 'B. Medium Shake'), ('Price_B', '₹ 160.00'), ('Option_C', None), ('Price_C', None), ('Target', 'A')])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
    Routine Items
    Routine Confidence_level
  LoopTerminator trials
  Routine End
